'CR1000
'Created by Short Cut (4.4)

'Declare Variables and Units
Public BattV
Public TRHData(2)
Public wind_speed
Public wind_direction
Public air_pressure
Public ground_temperature
Public IRtemp(2)

Alias TRHData(1)=temperature
Alias TRHData(2)=rel_humidity
Alias IRtemp(1)=surface_temperature
Alias IRtemp(2)=IRbodytemp


Units BattV=Volts
Units wind_speed=m/s
Units wind_direction=deg
Units air_pressure=hPa
Units temperature=degC
Units rel_humidity=%
Units ground_temperature=degC
Units surface_temperature=degC

'Define Data Tables
DataTable(Res_data_1_min,True,-1)
	DataInterval(0,1,Min,10)
	Minimum(1,BattV,FP2,False,False)
	FieldNames("BattV")
	Average(1,temperature,FP2,False)
	FieldNames("temperature")
	Sample(1,rel_humidity,FP2)
	Average(1,wind_speed,FP2,False)
	FieldNames("wind_speed")
	Maximum(1,wind_speed,FP2,False,False)
	FieldNames("gust_speed")
	Sample(1,wind_direction,FP2)
	Sample(1,air_pressure,IEEE4)
	Average(1,ground_temperature,FP2,False)
	FieldNames("ground_temperature")
	Average(1,surface_temperature,FP2,False)
	FieldNames("surface_temperature")
EndTable

'Main Program
BeginProg
	'Main Scan
	Scan(5,Sec,1,0)
		'Default CR1000 Datalogger Battery Voltage measurement 'BattV'
		Battery(BattV)
		'CS215 Temperature & Relative Humidity Sensor measurements 'temperature' and 'rel_humidity'
		SDI12Recorder(TRHData(),3,"0","M!",1,0,-1)
		'05103 Wind Speed & Direction Sensor (CSL) measurements 'wind_speed' and 'wind_direction'
		PulseCount(wind_speed,1,1,1,1,0.098,0)
		BrHalf(wind_direction,1,mV2500,8,1,1,2500,True,20000,_50Hz,355,0)
		If wind_direction>=355 Or wind_direction<0 Then wind_direction=0
		'CS100 Barometric Pressure Sensor measurement 'air_pressure'
		PortSet(1,1)
		VoltSe(air_pressure,1,mV2500,9,1,0,_50Hz,0.2,600)
		PortSet(1,0)
		air_pressure=air_pressure*1
		
   'PT100 PRT Temperature Probe (3WHB10K) (CSL) measurement
    BrHalf3W(ground_temperature,1,mV250,15,Vx2,1,2500,True,0,_50Hz,100,0)
    PRT(ground_temperature,1,ground_temperature,1,0)
    
    SDI12Recorder(IRtemp(),7,"0","M1!",1.0,0,-1)
    
		
    'Calibration

		'Call Data Tables and Store Data
		CallTable Res_data_1_min
	NextScan
EndProg
